<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule">
        <parameter name="File names">
        </parameter>
        <parameter name="Advanced import" selected="true">
            <parameter name="MS1 detector (Advanced)" selected="false" selected_item="Centroid">
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            </parameter>
            <parameter name="MS2 detector (Advanced)" selected="false" selected_item="Centroid">
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            </parameter>
        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">20.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Min group size in # of scans">8</parameter>
        <parameter name="Group intensity threshold">500.0</parameter>
        <parameter name="Min highest intensity">1000.0</parameter>
        <parameter name="Scan to scan accuracy (m/z)">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.baseline.BaselineFeatureResolverModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">resolved</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.0</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Limit by RT edges">false</parameter>
            <parameter name="Combine MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Lock to feature mobility range">false</parameter>
            <parameter name="Minimum merged intensity (IMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Min peak height">1000.0</parameter>
        <parameter name="Peak duration range (min)">
            <min>0.2</min>
            <max>1.0</max>
        </parameter>
        <parameter name="Baseline level">250.0</parameter>
        <parameter name="Min # of data points">8</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">60.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.7</parameter>
        <parameter name="Weight for RT">40.0</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.02</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.4</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filteredrtmz</parameter>
        <parameter name="Minimum features in a row (abs or %)" selected="false">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</parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="m/z" selected="true">
            <min>300.0</min>
            <max>3000.0</max>
        </parameter>
        <parameter name="Retention time" selected="true">
            <min>2.0</min>
            <max>20.0</max>
        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
</batch>
